PsychoPy2experiment version="2024.1.5"
Settings
  Completed URL = $"https://ucsd.co1.qualtrics.com/jfe/form/SV_6J1fEpvNX3nMgYJ?"+"experiment_name="+expInfo['experiment_name']+"&experiment_id="+expInfo['experiment_id']+"&credit_token="+expInfo['credit_token']+"&id="+expInfo['id']
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['id'], expInfo['experiment_name'], expInfo['experiment_id'], expInfo['date'])
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['loads.csv', 'stimsload.csv', 'img/load1.JPG', 'img/load2.JPG', 'img/load3.JPG', 'button1.png', 'button2.png', 'button3.png', 'button4.png', 'button5.png', 'buttonend.png', 'buttonnext.png', 'buttonok.png', 'stims.csv', 'trans_rect.png', 'img/Georgian1.JPG', 'img/Georgian2.JPG', 'img/Georgian3.JPG', 'img/Georgian4.JPG', 'img/Georgian5.JPG', 'img/Georgian6.JPG', 'img/Georgian7.JPG', 'img/Georgian8.JPG', 'img/Georgian9.JPG', 'img/Konkani1.JPG', 'img/Konkani2.JPG', 'img/Konkani3.JPG', 'img/Konkani4.JPG', 'img/Konkani5.JPG', 'img/Konkani6.JPG', 'img/Konkani7.JPG', 'img/Konkani8.JPG', 'img/Konkani9.JPG', 'img/training1.JPG', 'img/training2.JPG', 'img/training3.JPG', 'fframes/step0.png', 'fframes/step1.png', 'fframes/step2.png', 'fframes/step3.png', 'fframes/step4.png', 'fframes/step5.png', 'fframes/step6.png', 'fframes/step7.png', 'fframes/step8.png', 'fframes/step9.png', 'fframes/step10.png', 'fframes/step11.png']
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [3440, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = ratingclicks_within
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine load_img
    RoutineSettingsComponent load_img
      saveStartStop = False
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    CodeComponent code_loading
      Code Type = Both
      Begin Experiment:
        list_img_main=[]
      Begin JS Experiment:
        list_img_main = [];
      Begin JS Routine:
        list_img_main.push(stim_img);
      Begin Routine:
        list_img_main.append(stim_img)
  Routine collect
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  Routine end
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    TextComponent text_end
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation.

        You will now be redirected to a brief follow-up survey with a few additional questions. This survey is an important part of our research.


        Please click the [NEXT] button below to proceed to the follow-up questions.
    ImageComponent image_end
      image = buttonnext.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_end
      clickable = image_end
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine blank
    RoutineSettingsComponent blank
      saveStartStop = False
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    TextComponent fix
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine block_prompt
    RoutineSettingsComponent block_prompt
      saveStartStop = False
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    CodeComponent code_start_block
      Code Type = Auto->JS
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      Begin Routine:
        if this_trial==1 or this_trial==10:
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $block_prompt
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    ImageComponent image_next_3
      image = buttonnext.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next_3
      clickable = image_next_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block_separator
    RoutineSettingsComponent block_separator
      saveStartStop = False
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    CodeComponent code_separate_block
      Code Type = Auto->JS
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      Begin Routine:
        if this_trial==10:
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent separator
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Thank you for completing this part of the experiment.

        In the next part, we will ask you for different kinds of judgements and ratings.

        We will explain that next.
    ImageComponent image_next_2
      image = buttonnext.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next_2
      clickable = image_next_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine init_trial
    RoutineSettingsComponent init_trial
      saveStartStop = False
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    CodeComponent code_init_trial
      Code Type = Both
      Begin JS Routine:
        this_img = list_img_main.splice((- 1), 1);
        this_trial += 1;
        if ((this_trial <= 9)) {
            scale_type = scale_order[0];
        } else {
            if ((this_trial > 9)) {
                scale_type = scale_order[1];
            }
        }
        if ((scale_type === "Liking")) {
            block_prompt = instr_liking;
        } else {
            if ((scale_type === "Value")) {
                block_prompt = instr_value;
            }
        }
        psychoJS.experiment.addData("block", "main");
        psychoJS.experiment.addData("trial", this_trial);
        psychoJS.experiment.addData("effort", effort_level);
        psychoJS.experiment.addData("img", this_img);
        if ((effort_level === "low")) {
            step_size = step_low;
        } else {
            if ((effort_level === "medium")) {
                step_size = step_medium;
            } else {
                if ((effort_level === "high")) {
                    step_size = step_high;
                }
            }
        }
        fcounter = 0;
        figure_pos = (- 500);
        traveled = 0;
        collected = false;
        keyup = 0;
      Begin Routine:
        this_img=list_img_main.pop()
        this_trial += 1

        if this_trial <= 9:
            scale_type = scale_order[0]
        elif this_trial > 9:
            scale_type = scale_order[1]

        if scale_type == "Liking":
            block_prompt = instr_liking
        elif scale_type == "Value":
            block_prompt = instr_value

        thisExp.addData('block', 'main')
        thisExp.addData('trial', this_trial)
        thisExp.addData('effort', effort_level)
        thisExp.addData('img', this_img)

        if effort_level == 'low':
            step_size = step_low
        elif effort_level == 'medium':
            step_size = step_medium
        elif effort_level == 'high':
            step_size = step_high

        fcounter = 0
        figure_pos = -500
        traveled = 0
        collected = False
        keyup = 0
  Routine end_trial
    RoutineSettingsComponent end_trial
      saveStartStop = False
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    CodeComponent code_post
      Code Type = Both
      Begin Experiment:
        prompt_text = "Rest period before advancing\nto next calligraphy..."
        duration_prompt = 15
        duration_counter = 15
      Begin JS Experiment:
        prompt_text = "Rest period before advancing\nto next calligraphy...";
        duration_prompt = 15;
        duration_counter = 15;
    TextComponent text_counter
      letterHeight = 0.1
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_counter
      text [set every frame] = $str(round(duration_counter-t,1))
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    TextComponent text_post
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_prompt
      text [set every repeat] = $prompt_text
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  Routine attention_check
    RoutineSettingsComponent attention_check
      saveStartStop = False
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    CodeComponent code_attention_check
      Code Type = Both
      Begin Experiment:
        button_numbers = [1, 2, 3, 4, 5]
      Begin JS Experiment:
        button_numbers = [1, 2, 3, 4, 5]
      Begin JS Routine:
        correct_button = 0;
        if ((this_trial === 10)) {
            continueRoutine = true;
            correct_button = util.randchoice(button_numbers);
            attention_text = ("Please click button number " + correct_button);
        } else {
            continueRoutine = false;
        }
      Begin Routine:
        correct_button = 0

        if this_trial==10:
            continueRoutine = True
            correct_button = random.choice(button_numbers)
            attention_text = "Please click button number " + correct_button
        else:
            continueRoutine = False
      End JS Routine:
        if ((mouse_attention.clicked_name[0] === ("button" + correct_button.toString()))) {
            psychoJS.experiment.addData("attention_check", 1);
        } else {
            psychoJS.experiment.addData("attention_check", 0);
        }
      End Routine:
        if mouse_attention.clicked_name[0] == "button" + str(correct_button):
            thisExp.addData("attention_check", 1)
         else:
            thisExp.addData("attention_check", 0)
    TextComponent attention
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $attention_text
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    ImageComponent button1
      image = button1.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent button2
      image = button2.png
      pos = (-0.3, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent button3
      image = button3.png
      pos = (0.0, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent button4
      image = button4.png
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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      pos:
        (0.3, -0.2
        )
    ImageComponent button5
      image = button5.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_attention
      clickable = button1, button2, button3, button4, button5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setup
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    CodeComponent code_both
      Code Type = Both
      Before Experiment:
        import random
      Begin Experiment:
        scale_order = ['Liking', 'Value']
        random.shuffle(scale_order)

        step_distance = 1000-150
        step_low_base = step_distance/30
        step_medium_base = step_distance/100
        step_high_base = step_distance/270

        step_low = step_low_base + (1-(step_low_base % 1))
        step_medium = step_medium_base + (1-(step_medium_base % 1))
        step_high = step_high_base + (1-(step_high_base % 1))

        instr_liking = "In this part of the experiment, consider how much you personally like or dislike each calligraphy."
        instr_value = "In this part of the experiment, consider the value that you think each calligraphy has."
      Begin JS Experiment:
        blue = new util.Color([0, 0, 1]);
        green = new util.Color([0, 1, 0]);
        red = new util.Color([1, 0, 0]);
        scale_order = ["Liking", "Value"];
        scale_order = util.shuffle(scale_order);
        step_distance = (1000 - 150);
        step_low_base = (step_distance / 30);
        step_medium_base = (step_distance / 100);
        step_high_base = (step_distance / 270);
        step_low = (step_low_base + (1 - (step_low_base % 1)));
        step_medium = (step_medium_base + (1 - (step_medium_base % 1)));
        step_high = (step_high_base + (1 - (step_high_base % 1)));
        instr_liking = "In this part of the experiment, consider how much you personally like or dislike each calligraphy.";
        instr_value = "In this part of the experiment, consider the value that you think each calligraphy has.";
    TextComponent text_instr
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        TASK INSTRUCTIONS

        Thank you for agreeing to participate in today's experiment!

        Please make sure to read all following instructions carefully.

        You will be asked to collect a number of calligraphy art pieces. Each calligraphy is associated with a different level of effort, i.e., number of steps needed to collect it.

        When a calligraphy is presented, collect it by pressing [SPACE] for each step necessary. When the number of steps needed to collect a given calligraphy is reached, you will proceed to the next one. Try performing the steps as quickly as you can. Note that each calligraphy will be presented on the screen for a limited amount of time.

        After each calligraphy is collected you will be asked one of two separate questions about it. These two questions are independent and will be asked in different parts of the experiment. Use the scale presented on the screen to answer these questions. Use the mouse to navigate the response scale and confirm your choice.

        There will be a 15 second rest period following the collection and rating of each calligraphy.
    ImageComponent image_next
      image = buttonnext.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine taskload_instr
    RoutineSettingsComponent taskload_instr
      saveStartStop = False
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    TextComponent text_taskload
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Thank you for completing this part of the experiment.

        In the next part, we will ask you to rate different characteristics of the calligraphy collection task.

        After each collection, you will see rating scales to evaluate your experience for the current trial. Please consider each trial separately.

        Use your mouse to navigate the scales and click [OK] to confirm each rating.
    ImageComponent image_next_4
      image = buttonnext.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next_4
      clickable = image_next_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine init_taskload
    RoutineSettingsComponent init_taskload
      saveStartStop = False
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    CodeComponent code_walks_init
      Code Type = Both
      Begin JS Routine:
        this_img = list_img_load.splice((- 1), 1);
        this_trial += 1;
        load_order = "";
        //psychoJS.experiment.addData("block", "taskload");
        //psychoJS.experiment.addData("trial", this_trial);
        //psychoJS.experiment.addData("effort_level", effort_level);
        fcounter = 0;
        figure_pos = (- 500);
        traveled = 0;
        collected = false;
        if ((effort_level === "low")) {
            step_size = step_low;
        } else {
            if ((effort_level === "medium")) {
                step_size = step_medium;
            } else {
                if ((effort_level === "high")) {
                    step_size = step_high;
                }
            }
        }
        keyup = 0;
      Begin Routine:
        this_img=list_img_load.pop()
        this_trial += 1
        #scale_counter = 0
        load_order = ''
        # thisExp.addData('block', 'taskload')
        # thisExp.addData('trial', this_trial)
        # thisExp.addData('effort', effort_level)
        fcounter = 0
        figure_pos = -500
        traveled = 0
        collected = False

        if effort_level == 'low':
            step_size = step_low
        elif effort_level == 'medium':
            step_size = step_medium
        elif effort_level == 'high':
            step_size = step_high

        keyup = 0
  Routine walks_taskload
    RoutineSettingsComponent walks_taskload
      saveStartStop = False
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    CodeComponent code_walks_2
      Code Type = Both
      Begin Experiment:
        this_trial = 0
      Begin JS Experiment:
        this_trial = 0;
      Begin JS Routine:
        fframe = "fframes/step0.png";
        img_figure_2.setImage(fframe);
      Each Frame:
        keys_ctrl = key_control_2.getKeys(['space'], waitRelease=True)

        if 'space' in keys_ctrl:
            if keyup > 10:
                traveled += step_size
                if traveled <= step_distance:
                    figure_pos += step_size
                    fcounter += 1
                if traveled >= step_distance:
                    collected = True
            keyup = 0
        else:
            keyup += 1

        fframe = 'fframes/step' + str(fcounter%11) + ".png"

        if text_success_2.status==FINISHED:
            continueRoutine=False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys_ctrl = psychoJS.eventManager.getKeys({"keyList": ["space"], "waitRelease": true});
        if (_pj.in_es6("space", keys_ctrl)) {
            if ((keyup > 10)) {
                traveled += step_size;
                if ((traveled <= step_distance)) {
                    figure_pos += step_size;
                    fcounter += 1;
                }
                if ((traveled >= step_distance)) {
                    collected = true;
                }
            }
            keyup = 0;
        } else {
            keyup += 1;
        }
        fframe = (("fframes/step" + (fcounter % 11).toString()) + ".png");
        if ((text_success_2.status === PsychoJS.Status.FINISHED)) {
            continueRoutine = false;
        }
      End JS Routine:
        effort_time = t;
      End Routine:
        effort_time=t
    ImageComponent img_reward_3
      image [set every repeat] = $"img/"+this_img+".JPG"
      pos = (495, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      units = pix
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    ImageComponent img_rect_2
      image = trans_rect.png
      pos = (500, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0
      units = pix
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    ImageComponent img_figure_2
      image [set every frame] = $fframe
      pos [set every frame] = $(figure_pos, 50)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_ground_2
      fillColor = white
      pos = (0, 15)
      saveStartStop = False
      shape = rectangle
      size = (10000, 10)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_collect_2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = collected
      text = Walk to collect calligraphy...
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    TextComponent text_success_2
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [condition] = collected
      stopVal [duration (s)] = 2
      text = Calligraphy collected!
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    KeyboardComponent key_control_2
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine walks_collect
    RoutineSettingsComponent walks_collect
      saveStartStop = False
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    CodeComponent code_walks
      Code Type = Both
      Begin Experiment:
        this_trial = 0
      Begin JS Experiment:
        this_trial = 0;
      Begin JS Routine:
        fframe = "fframes/step0.png";
        img_figure.setImage(fframe);
        img_reward.setImage("img/"+this_img+".JPG");
      Each Frame:
        keys_ctrl = key_control.getKeys(['space'], waitRelease=True)

        if 'space' in keys_ctrl:
            if keyup > 10:
                traveled += step_size
                if traveled <= step_distance:
                    figure_pos += step_size
                    fcounter += 1
                if traveled >= step_distance:
                    collected = True
            keyup = 0
        else:
            keyup += 1

        fframe = 'fframes/step' + str(fcounter%11) + ".png"

        if text_success.status==FINISHED:
            continueRoutine=False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys_ctrl = psychoJS.eventManager.getKeys({"keyList": ["space"], "waitRelease": true});
        if (_pj.in_es6("space", keys_ctrl)) {
            if ((keyup > 10)) {
                traveled += step_size;
                if ((traveled <= step_distance)) {
                    figure_pos += step_size;
                    fcounter += 1;
                }
                if ((traveled >= step_distance)) {
                    collected = true;
                }
            }
            keyup = 0;
        } else {
            keyup += 1;
        }
        fframe = (("fframes/step" + (fcounter % 11).toString()) + ".png");
        if ((text_success.status === PsychoJS.Status.FINISHED)) {
            continueRoutine = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("effort_time", t);
      End Routine:
        thisExp.addData('effort_time', t)
    ImageComponent img_reward
      image [set every repeat] = $"img/"+this_img+".JPG"
      pos = (500, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = pix
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    ImageComponent img_rect
      image = trans_rect.png
      pos = (500, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0
      units = pix
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    ImageComponent img_figure
      image [set every frame] = $fframe
      pos [set every frame] = $(figure_pos, 50)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_ground
      fillColor = white
      pos = (0, 15)
      saveStartStop = False
      shape = rectangle
      size = (10000, 10)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_collect
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = collected
      text = Walk to collect calligraphy...
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    TextComponent text_success
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [condition] = collected
      stopVal [duration (s)] = 2
      text = Calligraphy collected!
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    KeyboardComponent key_control
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rating_collect
    RoutineSettingsComponent rating_collect
      saveStartStop = False
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    CodeComponent code_scale
      Code Type = Both
      Begin JS Routine:
        if ((scale_type === "Value")) {
            marker_color = blue;
            scale_text = "What is the value of this calligraphy?";
            scale_labels = ["$100", "$200", "$300", "$400", "$500"];
        }
        if ((scale_type === "Liking")) {
            marker_color = green;
            scale_text = "How much do you like this calligraphy?";
            scale_labels = ["really don't like it", "really like it"];
        }
        random_pos = util.randint(1, 5);
        scale = new visual.Slider({"win": psychoJS.window, "name": "scale", "size": [0.75, 0.075], "pos": [0, (- 0.2)], "units": "height", "labels": scale_labels, "startValue": random_pos, "granularity": 0, "style": ["rating"], "color": "LightGray", "markerColor": marker_color, "font": "OpenSans", "flip": false});
        scale_resp = [];
        scale_rt = [];
      Begin Routine:
        if scale_type == 'Value':
            marker_color = 'blue'
            scale_text = "What is the value of this calligraphy?"
            scale_labels = ["$100", "$200", "$300", "$400", "$500"]

        if scale_type == 'Liking':
            marker_color = 'green'
            scale_text = "How much do you like this calligraphy?"
            scale_labels = ["really don't like it", "really like it"]

        random_pos = randint(1,5)
        scale = visual.Slider(win=win, name='scale',
            size=(0.75, 0.075), pos=(0, -0.2), units='height',
            labels=scale_labels, startValue = random_pos,
            granularity=0, style=('rating',),
            color='LightGray', markerColor = marker_color,
            font='OpenSans', flip=False)

        # key_rate.clearEvents()
        # show_confirm = False
        scale_resp = []
        scale_rt = []
      Each Frame:
        #keys_rate = key_rate.getKeys(['f', 'k', 'space'], waitRelease=True)

        #if 'f' in keys_rate or 'k' in keys_rate:
        #    for key in keys_rate:
        #        if key == 'f':
        #            scale.markerPos-=1
        #        elif key == 'k':
        #            scale.markerPos+=1
        #    scale.recordRating(scale.markerPos)
        #    scale_rating = scale.getRating()
        #    scale_rt = scale.getRT()
        #    show_confirm = True

        #if show_confirm:
        #    if 'space' in keys_rate:
        #        continueRoutine=False
      Each JS Frame:
        /* Syntax Error: Fix Python code */
      End JS Routine:
        scale_rating = scale.getRating();
        scale_rt = scale.getRT();
        psychoJS.experiment.addData("rating_order", scale_order.join(''));
        psychoJS.experiment.addData("rating_type", scale_type);
        psychoJS.experiment.addData("rating", scale_rating);
        psychoJS.experiment.addData("rt", scale_rt);
      End Routine:
        scale_rating = scale.getRating()
        scale_rt = scale.getRT()

        thisExp.addData('rating_order', ''.join(scale_order))
        thisExp.addData('rating_type', scale_type)
        thisExp.addData('rating', scale_rating)
        thisExp.addData('rt', scale_rt)
    ImageComponent img_reward_2
      image [set every repeat] = $"img/"+this_img+".JPG"
      pos = (0, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = pix
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    TextComponent scale_question
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $scale_text
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    SliderComponent scale
      fillColor [set every repeat] = $marker_color
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.75, 0.075)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_ok
      image = buttonok.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [condition] = scale.rating
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    MouseComponent mouse_scale
      clickable = image_ok
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_rate
      allowedKeys = 'f','k','space'
      disabled = True
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rating_taskload
    RoutineSettingsComponent rating_taskload
      saveStartStop = False
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    CodeComponent code_scale_2
      Code Type = Both
      Begin JS Routine:
        random_pos = util.randint(1, 21);
        scale_2 = new visual.Slider({"win": psychoJS.window, "name": "scale_2", "ticks": [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21], "size": [1.25, 0.075], "pos": [0, (- 0.2)], "units": "height", "labels": [load_low, load_high], "startValue": random_pos, "granularity": 1, "style": ["rating"], "color": "LightGray", "markerColor": red, "font": "OpenSans", "flip": false});
      Begin Routine:
        random_pos = randint(1,21)
        scale_2 = visual.Slider(win=win, name='scale_2',
            ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21),
            size=(1.25, 0.075), pos=(0, -0.2), units='height',
            labels = [load_low, load_high], startValue = random_pos,
            granularity=1, style=('rating',),
            color='LightGray', markerColor = 'red',
            font='OpenSans', flip=False)
      Each Frame:
        #keys_rate = key_rate.getKeys(['f', 'k', 'space'], waitRelease=True)

        #if 'f' in keys_rate or 'k' in keys_rate:
        #    for key in keys_rate:
        #        if key == 'f':
        #            scale.markerPos-=1
        #        elif key == 'k':
        #            scale.markerPos+=1
        #    scale.recordRating(scale.markerPos)
        #    scale_rating = scale.getRating()
        #    scale_rt = scale.getRT()
        #    show_confirm = True

        #if show_confirm:
        #    if 'space' in keys_rate:
        #        continueRoutine=False
      Each JS Frame:
        /* Syntax Error: Fix Python code */
      End JS Routine:
        scale_rating = scale_2.getRating();
        scale_rt = scale_2.getRT();
        load_order += load_type;
        psychoJS.experiment.addData("block", "taskload");
        psychoJS.experiment.addData("load_order", load_order);
        psychoJS.experiment.addData("trial", this_trial);
        psychoJS.experiment.addData("effort", effort_level);
        psychoJS.experiment.addData("effort_time", effort_time);
        psychoJS.experiment.addData("load_type", load_type);
        psychoJS.experiment.addData("load_rating", scale_rating);
        psychoJS.experiment.addData("load_rt", scale_rt);
      End Routine:
        scale_rating = scale_2.getRating()
        scale_rt = scale_2.getRT()

        load_order += load_type

        thisExp.addData('block', 'taskload')
        thisExp.addData('load_order', load_order)
        thisExp.addData('trial', this_trial)
        thisExp.addData('effort', effort_level)
        thisExp.addData('effort_time', effort_time)
        thisExp.addData('load_type', load_type)
        thisExp.addData('load_rating', scale_rating)
        thisExp.addData('load_rt', scale_rt)
    TextComponent scale_question_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $load_question
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    SliderComponent scale_2
      fillColor [set every repeat] = red
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.25, 0.075)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    ImageComponent image_ok_2
      image = buttonok.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [condition] = scale_2.rating
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    MouseComponent mouse_scale_2
      clickable = image_ok_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_rate_2
      allowedKeys = 'f','k','space'
      disabled = True
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_taskload
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    CodeComponent code_post_2
      Code Type = Both
      Begin JS Routine:
        prompt_text = "Rest period before advancing\nto next calligraphy...";
        // psychoJS.experiment.addData("load_order", load_order);
        // psychoJS.experiment.addData("effort_time", effort_time);
      Begin Routine:
        # thisExp.addData('load_order', load_order)
        # thisExp.addData('effort_time', effort_time)
    TextComponent text_counter_2
      letterHeight = 0.1
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_counter
      text [set every frame] = $str(round(duration_counter-t,1))
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    TextComponent text_post_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_prompt
      text [set every repeat] = $prompt_text
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  Routine load_img_2
    RoutineSettingsComponent load_img_2
      saveStartStop = False
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    CodeComponent code_loading_2
      Code Type = Both
      Begin Experiment:
        list_img_load=[]
      Begin JS Experiment:
        list_img_load = [];
      Begin JS Routine:
        list_img_load.push(stim_img);
      Begin Routine:
        list_img_load.append(stim_img)
Flow
  Routine setup
  Routine blank
  LoopInitiator img_load_loop_main loopType="TrialHandler"
    conditionsFile = stims.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian1')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian3')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian4')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian5')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian6')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian7')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian8')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian9')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani1')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani3')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani4')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani5')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani6')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani7')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani8')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani9')])]
    Routine load_img
  LoopTerminator img_load_loop_main
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = stims.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian1')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian3')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian4')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian5')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian6')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian7')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian8')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian9')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani1')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani3')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani4')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani5')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani6')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani7')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani8')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani9')])]
    Routine init_trial
    Routine block_separator
    Routine attention_check
    Routine block_prompt
    Routine walks_collect
    Routine blank
    Routine rating_collect
    Routine blank
    Routine end_trial
    Routine blank
  LoopTerminator trials_loop
  Routine taskload_instr
  LoopInitiator img_load_loop_load loopType="TrialHandler"
    conditionsFile = stimsload.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('stim_img', 'load1')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'load2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'load3')])]
    Routine load_img_2
  LoopTerminator img_load_loop_load
  LoopInitiator trials_taskload loopType="TrialHandler"
    conditionsFile = stimsload.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('stim_img', 'load1')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'load2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'load3')])]
    Routine init_taskload
    Routine walks_taskload
    LoopInitiator loads_loop loopType="TrialHandler"
      conditionsFile = loads.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('load_type', 'mental'), ('load_question', 'How mentally demanding was this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'physical'), ('load_question', 'How physically demanding was this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'temporal'), ('load_question', 'How hurried or rushed was the pace of this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'performance'), ('load_question', 'How successful were you in accomplishing what you were asked to do in this trial?'), ('load_low', 'Perfect'), ('load_high', 'Failure')]),
        OrderedDict([('load_type', 'effort'), ('load_question', 'How hard did you have to work to  accomplish your level of performance in this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'frustration'), ('load_question', 'How insecure, discouraged, irritated, stressed, and annoyed were you in this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'pleasure'), ('load_question', 'How pleasant was it for you to complete this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'meaning'), ('load_question', 'How meaningful did you find\xa0this trial?'), ('load_low', 'Definitely meaningless'), ('load_high', 'Definitely meaningful')])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
      Routine blank
      Routine rating_taskload
    LoopTerminator loads_loop
    Routine blank
    Routine end_taskload
    Routine blank
  LoopTerminator trials_taskload
  Routine end
