PsychoPy2experiment version="2022.1.4"
Settings
  Completed URL = $"https://psychodpt.fra1.qualtrics.com/jfe/form/SV_9yNrzDYtOcjoTXg?experiment_id="+expInfo['experiment_id']+"&credit_token="+expInfo['credit_token']+"&experiment_name="+expInfo['experiment_name']+"&id="+expInfo['id']
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['id'], expInfo['experiment_name'], expInfo['experiment_id'], expInfo['date'])
  Experiment info = {'id': '', 'experiment_id': '', 'experiment_name': '', 'credit_token': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['buttonend.png', 'buttonnext.png', 'buttonok.png', 'conds.csv', 'stims.csv', 'walk.mp4', 'img/Georgian1.JPG', 'img/Georgian2.JPG', 'img/Georgian3.JPG', 'img/Georgian4.JPG', 'img/Georgian5.JPG', 'img/Georgian6.JPG', 'img/Georgian7.JPG', 'img/Georgian8.JPG', 'img/Georgian9.JPG', 'img/Konkani1.JPG', 'img/Konkani2.JPG', 'img/Konkani3.JPG', 'img/Konkani4.JPG', 'img/Konkani5.JPG', 'img/Konkani6.JPG', 'img/Konkani7.JPG', 'img/Konkani8.JPG', 'img/Konkani9.JPG', 'img/training1.JPG', 'img/training2.JPG', 'img/training3.JPG']
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = observe
  keyboardBackend = ioHub
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Routines
  Routine blank_screen
    TextComponent fix
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine start
    CodeComponent code_both
      Code Type = Both
      Begin Experiment:
        instr_value=False
        instr_liking=False
        coin_flip = random()
        if coin_flip < .5:
            cond="value"
            row_cond="0"
            instr_value=True
        else:
            cond="liking"
            row_cond="1"
            instr_liking=True
      Begin JS Experiment:
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        instr_value=false;
        instr_liking=false;
        coin_flip = Math.random();
        if ((coin_flip < 0.5)) {
            cond = "value";
            row_cond = "0";
            instr_value = true;
        } else {
            cond = "liking";
            row_cond = "1";
            instr_liking = true;
        }
        psychoJS.experiment.addData("id", expInfo['id']);
        psychoJS.experiment.addData("experiment_name", expInfo['experiment_name']);
        psychoJS.experiment.addData("experiment_id", expInfo['experiment_id']);
    TextComponent text_instr_value
      letterHeight = 0.025
      saveStartStop = False
      startVal [condition] = instr_value
      wrapWidth = 1.25
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      text:
        INSTRUCTIONS

        Thank you for agreeing to participate in today's experiment!

        Please make sure to read all following experiment instructions carefully.

        You will be asked to watch another person collecting a number of calligraphy art pieces in your name. Each calligraphy will be associated with a different level of effort, i.e., number of steps that needs to be taken to collect it.

        When a calligraphy is presented, please watch carefully as the person in the recording is collecting it for you by performing the effort using a device that mimics walking. When the person reaches the number of steps needed to collect a given calligraphy, they will proceed to the next one. Note that each calligraphy will be presented on the screen for a limited amount of time.

        After each calligraphy is collected you will be asked to indicate the value that you think that calligraphy has. Use the scale presented on the screen to answer that question. Please click a position on the scale to indicate your answer and confirm your choice.
    TextComponent text_instr_liking
      letterHeight = 0.025
      saveStartStop = False
      startVal [condition] = instr_liking
      wrapWidth = 1.25
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      text:
        INSTRUCTIONS

        Thank you for agreeing to participate in today's experiment!

        Please make sure to read all following experiment instructions carefully.

        You will be asked to watch another person collecting a number of calligraphy art pieces in your name. Each calligraphy will be associated with a different level of effort, i.e., number of steps that needs to be taken to collect it.

        When a calligraphy is presented, please watch carefully as the person in the recording is collecting it for you by performing the effort using a device that mimics walking. When the person reaches the number of steps needed to collect a given calligraphy, they will proceed to the next one. Note that each calligraphy will be presented on the screen for a limited amount of time.

        After each calligraphy is collected you will be asked to indicate how much you like or dislike it. Use the scale presented on the screen to answer that question. Please click a position on the scale to indicate your answer and confirm your choice.
    ImageComponent image_next
      image = buttonnext.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine load_img
    CodeComponent code_loading
      Code Type = Both
      Begin Experiment:
        list_img=[]
      Begin JS Experiment:
        list_img = [];
      Begin JS Routine:
        list_img.push(stim_img);
      Begin Routine:
        list_img.append(stim_img)
  Routine walks
    CodeComponent code_conds
      Code Type = Both
      Begin Experiment:
        this_trial = 0
      Begin JS Experiment:
        this_trial = 0;
      Begin JS Routine:
        this_img = list_img.pop();
        this_trial += 1;
        scale_counter = 0;
        scale_order = "";
        psychoJS.experiment.addData("trial", this_trial);
        psychoJS.experiment.addData("effort_level", effort_level);
        psychoJS.experiment.addData("effort_time", effort_time);
        psychoJS.experiment.addData("img", this_img);
      Begin Routine:
        this_img=list_img.pop()
        this_trial += 1
        scale_counter = 0
        scale_order = ''
        thisExp.addData('id', expInfo['participant'])
        thisExp.addData('gender', expInfo['gender'])
        thisExp.addData('age', expInfo['age'])
        thisExp.addData('trial', this_trial)
        thisExp.addData('effort_level', effort_level)
        thisExp.addData('effort_time', effort_time)
        thisExp.addData('img', this_img)
      Each Frame:
        #if text_collect_2.status==FINISHED:
        #    continueRoutine = False
      Each JS Frame:
        //if ((text_collect_2.status === PsychoJS.Status.FINISHED)) {
        //    continueRoutine = false;
        //}
      End JS Routine:
        scale_steps_sel = scale_steps.getRating();
        if ((scale_steps_sel === 1)) {
            scale_steps_ans = 30;
        } else {
            if ((scale_steps_sel === 2)) {
                scale_steps_ans = 100;
            } else {
                if ((scale_steps_sel === 3)) {
                    scale_steps_ans = 270;
                }
            }
        }
        psychoJS.experiment.addData("scale_steps", scale_steps_ans);
        psychoJS.experiment.addData("scale_steps_rt", scale_steps.getRT());
      End Routine:
        scale_steps_sel=scale_steps.getRating()

        if scale_steps_sel==1:
            scale_steps_ans=30
        elif scale_steps_sel==2:
            scale_steps_ans=100
        elif scale_steps_sel==3:
            scale_steps_ans=270

        thisExp.addData('scale_steps', scale_steps_ans)
        thisExp.addData('scale_steps_rt', scale_steps.getRT())
    ImageComponent img_reward_1
      image [set every repeat] = $"img/"+this_img+".JPG"
      pos = (175, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = pix
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    MovieComponent vid_walking
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = walk.mp4
      pos = (-175, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
      units = pix
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    TextComponent text_collect_1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = vid_walking.status==FINISHED
      text = Walking to collect calligraphy...
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    TextComponent text_collect_2
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [condition] = vid_walking.status==FINISHED
      stopVal [duration (s)] = 2
      text [set every repeat] = $"This person performed\n"+str(effort_steps)+" STEPS\nto collect this calligraphy in your name"
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    TextComponent question_walks
      letterHeight = 0.05
      saveStartStop = False
      startVal [condition] = text_collect_2.status==FINISHED
      text = How many steps did the person perform?
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    SliderComponent scale_steps
      forceEndRoutine = False
      granularity = 1
      labels = "270 steps", "100 steps", "30 steps"
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.025, 0.2)
      startVal [condition] = text_collect_2.status==FINISHED
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3)
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    ImageComponent walks_image_ok
      image = buttonok.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [condition] = scale_steps.getRating()
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    MouseComponent walks_mouse_ok
      clickable = walks_image_ok
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_force
      allowedKeys = '7'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine collect
  Routine rate
    CodeComponent code_scale
      Code Type = Both
      Begin JS Routine:
        if ((scale_type === "Value")) {
            marker_color = "blue";
            scale_text = "What is the value of this calligraphy?";
            scale_labels = ["$100", "$200", "$300", "$400", "$500"];
        }
        if ((scale_type === "Liking")) {
            marker_color = "green";
            scale_text = "How much do you like this calligraphy?";
            scale_labels = ["really don't like it", "really like it"];
        }
        random_pos = util.randint(1, 5);
        scale = new visual.Slider({"win": psychoJS.window, "name": "slider", "size": [0.75, 0.075], "pos": [0, (- 0.2)], "units": "height", "labels": scale_labels, "startValue": random_pos, "granularity": 0, "style": ["rating"], "color": "LightGray", "markerColor": marker_color, "font": "OpenSans", "flip": false});
      Begin Routine:
        if scale_type == 'Value':
            marker_color = "blue"
            scale_text = "What is the value of this calligraphy?"
            scale_labels = ["$100", "$200", "$300", "$400", "$500"]

        if scale_type == 'Liking':
            marker_color = "green"
            scale_text = "How much do you like this calligraphy?"
            scale_labels = ["really don't like it", "really like it"]

        random_pos = randint(1,5)
        scale = visual.Slider(win=win, name='slider',
            size=(0.75, 0.075), pos=(0, -0.2), units='height',
            labels=scale_labels, startValue = random_pos,
            granularity=0, style=('rating',),
            color='LightGray', markerColor = marker_color,
            font='OpenSans', flip=False)
      End JS Routine:
        /*
        scale_order += scale_type;
        if ((scale_type === "Value")) {
            psychoJS.experiment.addData("value_rating", scale.getRating());
            psychoJS.experiment.addData("value_rt", scale.getRT());
        }
        if ((scale_type === "Liking")) {
            psychoJS.experiment.addData("liking_rating", scale.getRating());
            psychoJS.experiment.addData("liking_rt", scale.getRT());
        }
        */
        psychoJS.experiment.addData('condition', cond);
        psychoJS.experiment.addData('scale_outcome', scale.getRating());
        psychoJS.experiment.addData('scale_outcome_rt', scale.getRT())
        //psychoJS.experiment.addData("scale_order", scale_order);
      End Routine:
        #scale_order += scale_type

        #if scale_type == 'Value':
        #    thisExp.addData('value_rating', scale.getRating())
        #    thisExp.addData('value_rt', scale.getRT())
        #
        #if scale_type == 'Liking':
        #    thisExp.addData('liking_rating', scale.getRating())
        #    thisExp.addData('liking_rt', scale.getRT())

        thisExp.addData('condition', cond)
        thisExp.addData('scale_outcome', scale.getRating())
        thisExp.addData('scale_outcome_rt', scale.getRT())
        #thisExp.addData('scale_order', scale_order)
    ImageComponent img_reward_2
      image [set every repeat] = $"img/"+this_img+".JPG"
      pos = (0, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = pix
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    TextComponent scale_question
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $scale_text
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    SliderComponent scale
      forceEndRoutine = False
      granularity = 0.1
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.75, 0.075)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_ok
      image = buttonok.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [condition] = scale.getRating()
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    MouseComponent mouse_scale
      clickable = image_ok
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment has ended.

        Thank you for your participation!
    ImageComponent image_end
      image = buttonend.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_end
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine post
    CodeComponent code_post
      Code Type = Both
      Begin JS Routine:
        scale_counter += 1;
        //if ((scale_counter < 2)) {
        //    prompt_text = "Now please answer\nthe next separate question";
        //} else {
        //    prompt_text = "Now advancing to next calligraphy...";
        //}
        prompt_text = "Now advancing to next calligraphy...";
      Begin Routine:
        scale_counter += 1
        #if scale_counter < 2:
        #    prompt_text = "Now please answer\nthe next separate question"
        #else:
        #    prompt_text = "Now advancing to next calligraphy..."
        prompt_text = "Now advancing to next calligraphy..."
    TextComponent text_post
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $prompt_text
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Flow
  Routine start
  Routine blank_screen
  LoopInitiator img_load_loop loopType="TrialHandler"
    conditionsFile = stims.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Georgian1')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Georgian2')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Georgian3')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Georgian4')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Georgian5')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Georgian6')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Georgian7')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Georgian8')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Georgian9')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Konkani1')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Konkani2')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Konkani3')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Konkani4')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Konkani5')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Konkani6')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Konkani7')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Konkani8')])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
    Routine load_img
  LoopTerminator img_load_loop
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = stims.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine walks
    LoopInitiator ratings_loop loopType="TrialHandler"
      Selected rows = $row_cond
      conditionsFile = conds.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('scale_type', 'Value')]),
        OrderedDict([('scale_type', 'Liking')])]
      Routine blank_screen
      Routine rate
      Routine post
    LoopTerminator ratings_loop
    Routine blank_screen
  LoopTerminator trials_loop
  Routine end
