PsychoPy2experiment version="2020.2.8"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['Participant_number'], expInfo['Group'], expName, expInfo['date'])
  Experiment info = {'Participant_number': '', 'Group': '[1, 2]', 'Sex': "['male', 'female']", 'Age': '', 'Height': '', 'Weight': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Use version = 3.1
  Window size (pixels) = [1536, 864]
  color = $[-1.000,-1.000,-1.000]
  expName = buysell
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Routines
  Routine ITI
    TextComponent blank_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Instructions_End
    TextComponent textEnd
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The experiment has ended.

        Thank you for your participation!
    KeyboardComponent keyResp_end
      allowedKeys = '7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Setup
    CodeComponent init_options
      Code Type = Py
      Begin Experiment:
        from time import gmtime, strftime, localtime
        import random
        import pandas as pd
        import csv
        import numpy
        import re

        #Setup paths
        pre_str0='txt/'
        pre_str1='trials/'
        pre_str2='data/'

        #Shorten procedure if test run or debug
        testing=True

        if testing==False:
            n_instr=1
            stimuli=pd.read_csv(pre_str1+'trialStim.txt', delimiter='\t')

        elif testing==True:
            n_instr=1
            stimuli=pd.read_csv(pre_str1+'trialStim_test.txt', delimiter='\t')

        #Set parameters for rating scales
        navig1 = dict(leftKeys='f', rightKeys='k', acceptKeys='space',
                      choices=['$0.10','$0.25','$0.45','$0.75','$1'],
                      markerStart='$0.45', marker='circle',
                      textColor ='white',
                      markerColor='red',
                      showAccept=False, pos=(0, -0.4),
                      noMouse=True)

        #Run blocks depending on group condition
        if expInfo['Group']=='1':
            cond = '1'
            scale_condition='Buy'
            task_text="Perform the effort to access this art piece"
            complete_text="You sucessfuly performed the steps.\nYou are now a buyer of this art piece\n"
            scale_text="Now that you are a buyer,\nhow much would you spend to own this art piece?\n"
            offer_info="We will now select one of the art pieces and compare our price with your buying offer.\n\nCall the experimenter for the transaction."
            navig=navig1
            with open(pre_str0+'instructionsBuy.txt') as f:
                textTask=f.read().strip()

        elif expInfo['Group']=='2':
            cond = '2'
            scale_condition='Sell'
            task_text="Perform the effort to access this art piece"
            complete_text="You sucessfuly performed the steps.\nYou are now the owner of this art piece\n"
            scale_text="Now that you are the owner,\nhow much would you sell this art piece for?\n"
            offer_info="We will now select one of the art pieces and compare our price with your selling offer.\n\nCall the experimenter for the transaction."
            navig=navig1
            with open(pre_str0+'instructionsSell.txt') as f:
                textTask=f.read().strip()

        textIntro=''
        with open(pre_str0+'instructionsGeneral.txt') as f:
            textIntro=f.read().strip()

        #Read stimuli files
        colnames=['trialNum', 'effortLevelTrain', 'effortRepTrain',
                  'stimTrain', 'effortLevelProc', 'effortRepProc', 'stimProc']

        effortsListTrain=stimuli.effortLevelTrain.tolist()
        effortsListProc=stimuli.effortLevelProc.tolist()
        imageListTrain=stimuli.stimTrain.tolist()
        imageListProc=stimuli.stimProc.tolist()

        #Drop NaNs
        effortsListTrain=[f for f in effortsListTrain if str(f) != 'nan']
        effortsListProc=[f for f in effortsListProc if str(f) != 'nan']
        imageListTrain=[f for f in imageListTrain if str(f) != 'nan']
        imageListProc=[f for f in imageListProc if str(f) != 'nan']

        #Randomize image order
        #This randomized list is used for presenting the images
        imageListRandTrain=random.sample(imageListTrain, len(imageListTrain))
        imageListRandProc=random.sample(imageListProc, len(imageListProc))

        #Get the participant and group info for naming data files
        subjectID=expInfo['Participant_number']
        subjectGroup=expInfo['Group']

        #Number of trials
        trialsTrain=len(effortsListTrain)
        trialsProc=len(effortsListProc)

        #Setup data logging
        root_dir=os.getcwd()
        data_dir=os.path.join(root_dir, 'data')
        fname_order=pre_str2+str(subjectID)+'_'+str(subjectGroup)+'_'+'imgOrder.csv'
        fname_data=str(subjectID)+'_'+str(subjectGroup)+'_'+'data.csv'
        fname_data_practice=str(subjectID)+'_'+str(subjectGroup)+'_'+'data_practice.csv'
        fname_sub=str(subjectID)+'_'+str(subjectGroup)+'_'+'subjectInfo.csv'
        dataColTrain=['condition', 'id', 'trialPractice', 'effort', 'stim', 'scaleRating', 'scaleRT']
        dataCol=['condition', 'id', 'trial', 'effort', 'stim', 'scaleRating', 'scaleRT']
        subCol=['subjID', 'group', 'sex', 'age', 'height', 'weight', 'time']
        df=pd.DataFrame(columns=dataCol)
        df_practice=pd.DataFrame(columns=dataColTrain)
        df_sub=pd.DataFrame(columns=subCol)

        with open(fname_order,'w', newline='') as w:
          writer=csv.writer(w)
          writer.writerow(['imageListProc'])
          for i in range(len(imageListRandProc)):
            writer.writerow([imageListRandProc[i]])

        def fill_df_from_LikertTrain(df_practice, trialTrain, scaleRating, scaleRT):
                                         row_idx = df_practice.shape[0]+1
                                         df_practice.loc[row_idx, 'condition']=scale_condition
                                         df_practice.loc[row_idx, 'id']=subjectID
                                         df_practice.loc[row_idx, 'trialPractice']=trialTrain
                                         df_practice.loc[row_idx, 'effort']=thisEffort
                                         df_practice.loc[row_idx, 'stim']=imageItem
                                         df_practice.loc[row_idx, 'time']=thisTime
                                         df_practice.loc[row_idx, 'scaleRating']=currentRating.getRating()
                                         df_practice.loc[row_idx, 'scaleRT']=currentRating.getRT()

        def fill_df_from_Likert(df, trial, scaleRating, scaleRT):
                                   row_idx = df.shape[0]+1
                                   df.loc[row_idx, 'condition']=scale_condition
                                   df.loc[row_idx, 'id']=subjectID
                                   df.loc[row_idx, 'trial']=trial
                                   df.loc[row_idx, 'effort']=thisEffort
                                   df.loc[row_idx, 'stim']=imageItem
                                   df.loc[row_idx, 'time']=thisTime
                                   df.loc[row_idx, 'scaleRating']=currentRating.getRating()
                                   df.loc[row_idx, 'scaleRT']=currentRating.getRT()
      Begin Routine:
        #Save subject info
        df_sub.loc[0, 'subjID']=subjectID
        df_sub.loc[0, 'group']=subjectGroup
        df_sub.loc[0, 'sex']=expInfo['Sex']
        df_sub.loc[0, 'age']=expInfo['Age']
        df_sub.loc[0, 'height']=expInfo['Height']
        df_sub.loc[0, 'weight']=expInfo['Weight']
        df_sub.loc[0, 'time']=strftime("%Y-%m-%d %H:%M:%S", localtime())
        df_sub.to_csv(os.path.join(data_dir, fname_sub))
  Routine startTraining
    CodeComponent codeTrain
      Code Type = Py
      Begin Experiment:
        #Reset practice trial counter
        trialTrain=0
      Begin Routine:
        #Select stimuli based on current practice trial number
        thisEffort=effortsListTrain[trialTrain]
        imageItem=imageListRandTrain[trialTrain]
        trialTrain=trialTrain+1
        stopTime=4.0
  Routine startProc
    CodeComponent codeProc
      Code Type = Py
      Begin Experiment:
        #Reset main trial counter
        trial=0
      Begin Routine:
        #Select stimuli based on current practice trial number
        thisEffort=effortsListProc[trial]
        imageItem=imageListRandProc[trial]
        trial=trial+1
        stopTime=0
  Routine Instructions_Task
    TextComponent textIntroTask
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $textTask
      wrapWidth = 1.5
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    TextComponent textContinue_2
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press [SPACE] to continue.
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    KeyboardComponent keyResp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions_Main
    TextComponent textTaskStart
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Practice session has ended.

        If you have any questions, please notify the experimenter now.

        Press [SPACE] to proceed to the main experiment session.
    KeyboardComponent keyResp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions_Practice
    TextComponent textIntroPractice
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        PRACTICE SESSION

        The experiment will begin with a brief practice session to help familiarize you with the rules.

        The practice session will be followed by the main experimental session.
    TextComponent textContinue_3
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press [SPACE] to continue.
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    KeyboardComponent keyResp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions_General
    TextComponent textIntroGeneral
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $textIntro
      wrapWidth = 1.5
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    TextComponent textContinue_1
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press [SPACE] to continue.
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    KeyboardComponent keyResp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Effort_Performance
    ImageComponent reward_present_1
      image [set every repeat] = $'img/'+imageItem+'.jpg'
      pos = (0, 175)
      size = (300, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
      units = pix
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    TextComponent textCollect
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $task_text
      wrapWidth = 1.5
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    KeyboardComponent keyResp_nextTrial
      allowedKeys = '7'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent codeTime
      Code Type = Py
      End Routine:
        thisTime=t-reward_present_1.tStart
  Routine Rest_Period
    TextComponent textRest
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Rest period
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    TextComponent textCounter
      letterHeight = 0.15
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $str(round(routineTimer.getTime(),1))
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  Routine Save_Data
    CodeComponent codeSave
      Code Type = Py
      End Routine:
        #Save scale response and RT
        scaleResp=currentRating.getRating()
        scaleRT=currentRating.getRT()

        #Save last response
        fill_df_from_Likert(df, trial, scaleResp, scaleRT)
        df.to_csv(os.path.join(data_dir, fname_data))
  Routine Rate_Reward
    CodeComponent setup_rating_1
      Code Type = Py
      Begin Routine:
        #Set the rating scale description
        currentRating = visual.RatingScale(win, scale = scale_text, **navig)
    ImageComponent rewardPresent_1
      image [set every repeat] = $'img/'+imageItem+'.jpg'
      pos = (0, 175)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = pix
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    TextComponent ratingText_1
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Rate with [F] or [K] keys and press [SPACE] to accept.
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    CodeComponent present_rating_1
      Code Type = Py
      Begin Routine:
        #Draw scale
        stim_to_draw1=[rewardPresent_1]
        stim_to_draw2=[currentRating, ratingText_1]

        currentRating.reset()
        currentRating.draw()

        clock = core.Clock()
        while currentRating.noResponse:
            if clock.getTime() < 4.0:
                for stim in stim_to_draw1: stim.draw()
            for stim in stim_to_draw2: stim.draw()
            win.flip()
  Routine Reward_Collected
    TextComponent textCollected
      color = green
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $complete_text
      wrapWidth = 1.5
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    TextComponent textStop
      color = green
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stopTime
      text = (stop walking)
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  Routine Save_Data_Practice
    CodeComponent codeSave_3
      Code Type = Py
      End Routine:
        #Save scale response and RT
        scaleResp=currentRating.getRating()
        scaleRT=currentRating.getRT()

        #Save last response
        fill_df_from_LikertTrain(df_practice, trialTrain, scaleResp, scaleRT)
        df_practice.to_csv(os.path.join(data_dir, fname_data_practice))
  Routine blank0
    TextComponent blank_text_0
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine blank1
    TextComponent blank_text_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Time_Travel
    TextComponent textTrainsInfo
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $offer_info
      wrapWidth = 1.5
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    KeyboardComponent keyResp_ExpCall
      allowedKeys = '7'
      forceEndRoutine = True
      store = nothing
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    CodeComponent codeTimeTravel
      Code Type = Py
      Begin Routine:
        # Read current participant choices
        travel=pd.read_csv(pre_str2+fname_data)
        time_travel=travel[['stim','scaleRating']].head()

        # Select response row from a random trial
        travel_trans=time_travel.sample(n=1)

        # Get image from the randomly selected trial
        travel_stim=travel_trans['stim'].iloc[0]

        # Get scale response from the randomly selected trial
        travel_mon_c=travel_trans[['scaleRating']].iloc[0]
        travel_mon=float(travel_mon_c.astype(str).str.replace('$',''))

        # Generate random amount
        exp_mon=round(random.uniform(0.10,1),2)

        # Compare participant amount with exp amount
        if cond=='1':
            if travel_mon > exp_mon:
                travel_text="Your offer: $"+str('{:.2f}'.format(travel_mon))+"."
                exp_text="Our price: $"+str('{:.2f}'.format(exp_mon))+"."
                travel_result1="Your offer is higher than our price."
                travel_result2="You buy the art piece."
            else:
                travel_text="Your offer: $"+str('{:.2f}'.format(travel_mon))+"."
                exp_text="Our price: $"+str('{:.2f}'.format(exp_mon))+"."
                travel_result1="Your offer is lower than our price."
                travel_result2="You keep the money."

        elif cond=='2':
            if travel_mon < exp_mon:
                travel_text="Your offer: $"+str('{:.2f}'.format(travel_mon))+"."
                exp_text="Our price: $"+str('{:.2f}'.format(exp_mon))+"."
                travel_result1="Your offer is lower than our price."
                travel_result2="You sell the art piece."
            else:
                travel_text="Your offer: $"+str('{:.2f}'.format(travel_mon))+"."
                exp_text="Our price: $"+str('{:.2f}'.format(exp_mon))+"."
                travel_result1="Your offer is higher than our price."
                travel_result2="You keep the art piece."
  Routine End_Transaction
    ImageComponent imageTravel
      image [set every repeat] = $'img/'+travel_stim+'.jpg'
      pos = (0, 175)
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent textTravel
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 2
      text [set every repeat] = $travel_text
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    TextComponent textExp
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 4
      text [set every repeat] = $exp_text
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    TextComponent textTravelResult1
      letterHeight = 0.1
      pos = (0, -0.4)
      startVal [time (s)] = 6
      text [set every repeat] = $travel_result1
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    TextComponent textTravelResult2
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 8
      text [set every repeat] = $travel_result2
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    TextComponent textTravelAccept
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 8
      text = Press [SPACE] to continue.
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    KeyboardComponent key_respTimeTravel
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Setup
  LoopInitiator run_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_instr
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    Routine Instructions_General
    Routine blank0
    Routine Instructions_Task
    Routine blank0
    Routine Instructions_Practice
  LoopTerminator run_instructions
  Routine blank1
  LoopInitiator trials_practice loopType="TrialHandler"
    loopType = sequential
    nReps = trialsTrain
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    Routine startTraining
    Routine Effort_Performance
    Routine Reward_Collected
    Routine blank1
    Routine Rate_Reward
    Routine Rest_Period
    Routine ITI
    Routine Save_Data_Practice
  LoopTerminator trials_practice
  Routine blank1
  Routine Instructions_Main
  Routine blank1
  LoopInitiator trials_main loopType="TrialHandler"
    loopType = sequential
    nReps = trialsProc
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    Routine startProc
    Routine Effort_Performance
    Routine Reward_Collected
    Routine blank1
    Routine Rate_Reward
    Routine Rest_Period
    Routine ITI
    Routine Save_Data
  LoopTerminator trials_main
  Routine Time_Travel
  Routine End_Transaction
  Routine Instructions_End
