PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Completed URL = $"https://ucsd.co1.qualtrics.com/jfe/form/SV_6J1fEpvNX3nMgYJ?"+"experiment_name="+expInfo['experiment_name']+"&experiment_id="+expInfo['experiment_id']+"&credit_token="+expInfo['credit_token']+"&id="+expInfo['id']
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['id'], expInfo['experiment_name'], expInfo['experiment_id'], expInfo['date'])
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['img/buttonA.png', 'img/buttonB.png', 'img/buttonC.png', 'img/buttonD.png', 'img/buttonE.png', 'img/buttonok.png', 'stims/Georgian1.JPG', 'stims/Georgian2.JPG', 'stims/Georgian3.JPG', 'stims/Georgian4.JPG', 'stims/Georgian5.JPG', 'stims/Georgian6.JPG', 'stims/Georgian7.JPG', 'stims/Georgian8.JPG', 'stims/Georgian9.JPG', 'stims/Konkani1.JPG', 'stims/Konkani2.JPG', 'stims/Konkani3.JPG', 'stims/Konkani4.JPG', 'stims/Konkani5.JPG', 'stims/Konkani6.JPG', 'stims/Konkani7.JPG', 'stims/Konkani8.JPG', 'stims/Konkani9.JPG', 'stims/load1.JPG', 'stims/load2.JPG', 'stims/load3.JPG', 'img/button1.png', 'img/button2.png', 'img/button3.png', 'img/button4.png', 'img/button5.png', 'img/buttonend.png', 'img/buttonnext.png', 'img/trans_rect.png', 'fframes/step0.png', 'fframes/step1.png', 'fframes/step2.png', 'fframes/step3.png', 'fframes/step4.png', 'fframes/step5.png', 'fframes/step6.png', 'fframes/step7.png', 'fframes/step8.png', 'fframes/step9.png', 'fframes/step10.png', 'fframes/step11.png', 'conditions/loads.csv', 'conditions/stims.csv', 'conditions/stimsload.csv']
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [3440, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = buysell_within2
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine fix
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    TextComponent text_fix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine ready_trial
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    CodeComponent code_ready_trial
      Code Type = JS
      Begin JS Routine:
        this_img = list_img.splice((- 1), 1);
        this_trial += 1;
        if ((this_trial <= 9)) {
            scale_type = scale_order[0];
        } else {
            if ((this_trial > 9)) {
                scale_type = scale_order[1];
            }
        }

        fcounter = 0;
        figure_pos = (- 500);
        traveled = 0;
        collected = false;
        if ((effort_level === "low")) {
            step_size = step_low;
        } else {
            if ((effort_level === "medium")) {
                step_size = step_medium;
            } else {
                if ((effort_level === "high")) {
                    step_size = step_high;
                }
            }
        }
        keyup = 0;
        if ((scale_type === "Buyer")) {
            marker_color = blue;
            block_text='In this part of the experiment,\nyou will be a buyer of the art pieces you collect';
            task_text = "Perform the effort to access this art piece";
            complete_text = "You sucessfuly performed the steps.\nYou are now a buyer of this art piece\n";
            scale_text = "Now that you are a buyer,\nhow much would you spend to own this art piece?\n";
            scale_labels = ["$100", "$200", "$300", "$400", "$500"];
        }
        if ((scale_type === "Seller")) {
            marker_color = green;
            block_text='In this part of the experiment,\nyou will be a seller of the art pieces you collect';
            task_text = "Perform the effort to access this art piece";
            complete_text = "You sucessfuly performed the steps.\nYou are now the owner of this art piece\n";
            scale_text = "Now that you are the owner,\nhow much would you sell this art piece for?\n";
            scale_labels = ["$100", "$200", "$300", "$400", "$500"];
        }
  Routine start_block
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    CodeComponent code_start_block
      Code Type = JS
      Begin JS Routine:
        if (((this_trial === 1) || (this_trial === 10))) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    TextComponent text_block_prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_text
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    ImageComponent image_next_2
      image = img/buttonnext.png
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next_2
      clickable = image_next_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setup
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    CodeComponent code_setup
      Code Type = JS
      Begin JS Experiment:
        blue = new util.Color([0, 0, 1]);
        green = new util.Color([0, 1, 0]);
        red = new util.Color([1, 0, 0]);
        win=psychoJS.window;
        event=psychoJS.eventManager;
        scale_order = ['Buyer', 'Seller'];
        scale_order = util.shuffle(scale_order);
        step_distance = 1000-150;
        step_low_base = step_distance/30;
        step_medium_base = step_distance/100;
        step_high_base = step_distance/270;
        step_low = step_low_base + (1-(step_low_base % 1));
        step_medium = step_medium_base + (1-(step_medium_base % 1));
        step_high = step_high_base + (1-(step_high_base % 1));
        this_trial = 0;
        rest_time = 15;
    TextComponent text_instr
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        TASK INSTRUCTIONS

        Thank you for agreeing to participate in today's experiment!

        Please make sure to read all following instructions carefully.

        This experiment offers you an opportunity to access a number of calligraphy art pieces. Each calligraphy is associated with a different level of effort, i.e., number of steps needed to access it.

        When a calligraphy is presented, collect it by pressing [SPACE] for each step necessary. When the number of steps needed to collect a given calligraphy is reached, you will proceed to the next one. Try performing the steps as quickly as you can. Note that each calligraphy will be presented on the screen for a limited amount of time. There will be a 5 second rest period following the collection of each calligraphy.

        When the required number of steps is reached you will sometimes become the buyer and sometimes you will become the seller of the art piece. These two situations are separate so please consider them independently.
        We will give you more instructions shortly.
    ImageComponent image_next
      image = img/buttonnext.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine load_instr
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    TextComponent text_load_instr
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing this part of the experiment.

        In the next part, we will ask you to rate different characteristics of the calligraphy collection task.

        After each collection, you will see rating scales to evaluate your experience for the current trial. Please consider each trial separately.

        Use your mouse to navigate the scales and click [OK] to confirm each rating.
    ImageComponent image_next_3
      image = img/buttonnext.png
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next_3
      clickable = image_next_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine load_ready
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    CodeComponent code_loads_init
      Code Type = JS
      Begin JS Routine:
        this_img = list_img_load.splice((- 1), 1);
        this_trial += 1;
        fcounter = 0;
        figure_pos = (- 500);
        traveled = 0;
        collected = false;
        if ((effort_level === "low")) {
            step_size = step_low;
        } else {
            if ((effort_level === "medium")) {
                step_size = step_medium;
            } else {
                if ((effort_level === "high")) {
                    step_size = step_high;
                }
            }
        }
        keyup = 0;
  Routine load_rating
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    CodeComponent code_load
      Code Type = JS
      Begin JS Routine:
        random_pos = util.randint(1, 21);
        scale_load = new visual.Slider({"win": psychoJS.window, "name": "scale_load", "ticks": [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21], "size": [1.25, 0.075], "pos": [0, (- 0.2)], "units": "height", "labels": [load_low, load_high], "startValue": random_pos, "granularity": 1, "style": ["rating"], "color": "LightGray", "markerColor": red, "font": "Arial", "flip": false});
      End JS Routine:
        scale_rating = scale_load.getRating();
        scale_rt = scale_load.getRT();
        psychoJS.experiment.addData("block", "taskload");
        psychoJS.experiment.addData("trial", this_trial);
        psychoJS.experiment.addData("effort", effort_level);
        psychoJS.experiment.addData("effort_time", effort_time);
        psychoJS.experiment.addData("img", this_img);
        psychoJS.experiment.addData("component", load_type);
        psychoJS.experiment.addData("rating", scale_rating);
        psychoJS.experiment.addData("rt", scale_rt);
    TextComponent text_question_load
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $load_question
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    SliderComponent scale_load
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.25, 0.075)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    ImageComponent image_ok_2
      image = img/buttonok.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [condition] = scale_load.rating
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    MouseComponent mouse_load
      clickable = image_ok_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine rand_img_load
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    CodeComponent code_rand_img_2
      Code Type = JS
      Begin JS Experiment:
        list_img_load = [];
      Begin JS Routine:
        list_img_load.push(stim_img);
  Routine rand_img_main
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    CodeComponent code_rand_img
      Code Type = JS
      Begin JS Experiment:
        list_img = [];
      Begin JS Routine:
        list_img.push(stim_img);
  Routine bid_rating
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    CodeComponent code_bid
      Code Type = JS
      Begin JS Routine:
        random_pos = util.randint(1, 5);
        scale_bid = new visual.Slider({"win": psychoJS.window, "name": "scale_bid", "size": [0.75, 0.075], "pos": [0, (- 0.2)], "units": "height", "labels": scale_labels, "startValue": random_pos, "granularity": 0, "style": ["rating"], "color": "LightGray", "markerColor": marker_color, "font": "Arial", "flip": false});
        scale_resp = [];
        scale_rt = [];
      End JS Routine:
        scale_rating = scale_bid.getRating();
        scale_rt = scale_bid.getRT();
        psychoJS.experiment.addData("block", "main");
        psychoJS.experiment.addData("trial", this_trial);
        psychoJS.experiment.addData("condition", scale_type);
        psychoJS.experiment.addData("effort", effort_level);
        psychoJS.experiment.addData("effort_time", effort_time);
        psychoJS.experiment.addData("img", this_img);
        psychoJS.experiment.addData("rating", scale_rating);
        psychoJS.experiment.addData("rt", scale_rt);
    ImageComponent image_reward_2
      image [set every repeat] = $"stims/"+this_img+".JPG"
      pos = (0, 200)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = pix
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    TextComponent text_question_main
      letterHeight = 0.05
      pos = (0, -0.075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $scale_text
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    SliderComponent scale_bid
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.75, 0.075)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_ok
      image = img/buttonok.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [condition] = scale_bid.rating
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    MouseComponent mouse_bid
      clickable = image_ok_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine bid_walks
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    CodeComponent code_walks
      Code Type = JS
      Begin JS Routine:
        fframe = "fframes/step0.png";
        image_figure.setImage(fframe);
        image_reward_1.setImage("stims/"+this_img+".JPG");
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys_ctrl = event.getKeys({"keyList": ["space"], "waitRelease": true});
        if (_pj.in_es6("space", keys_ctrl)) {
            if ((keyup > 10)) {
                traveled += step_size;
                if ((traveled <= step_distance)) {
                    figure_pos += step_size;
                    fcounter += 1;
                }
                if ((traveled >= step_distance)) {
                    collected = true;
                }
            }
            keyup = 0;
        } else {
            keyup += 1;
        }
        fframe = (("fframes/step" + (fcounter % 11).toString()) + ".png");
        if ((text_collect_2.status === PsychoJS.Status.FINISHED)) {
            continueRoutine = false;
        }
      End JS Routine:
        effort_time = t;
    ImageComponent image_reward_1
      image [set every repeat] = $"stims/"+this_img+".JPG"
      pos = (500, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = pix
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    ImageComponent image_rect
      image = img/trans_rect.png
      pos = (500, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_figure
      image [set every frame] = $fframe
      pos [set every frame] = $(figure_pos, 50)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_surface_1
      fillColor = white
      pos = (0, 15)
      saveStartStop = False
      shape = triangle
      size = (10000, 10)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_collect_1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = collected
      text [set every repeat] = $task_text
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    TextComponent text_collect_2
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [condition] = collected
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $complete_text
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    KeyboardComponent key_control
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine load_walks
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    CodeComponent code_walks_2
      Code Type = JS
      Begin JS Routine:
        fframe = "fframes/step0.png";
        image_figure_2.setImage(fframe);
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys_ctrl = psychoJS.eventManager.getKeys({"keyList": ["space"], "waitRelease": true});
        if (_pj.in_es6("space", keys_ctrl)) {
            if ((keyup > 10)) {
                traveled += step_size;
                if ((traveled <= step_distance)) {
                    figure_pos += step_size;
                    fcounter += 1;
                }
                if ((traveled >= step_distance)) {
                    collected = true;
                }
            }
            keyup = 0;
        } else {
            keyup += 1;
        }
        fframe = (("fframes/step" + (fcounter % 11).toString()) + ".png");
        if ((text_collect_4.status === PsychoJS.Status.FINISHED)) {
            continueRoutine = false;
        }
      End JS Routine:
        effort_time = t;
    ImageComponent image_reward_3
      image [set every repeat] = $"stims/"+this_img+".JPG"
      pos = (495, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = pix
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    ImageComponent image_rect_2
      flipHoriz = True
      image = img/trans_rect.png
      pos = (500, 175)
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_figure_2
      image [set every frame] = $fframe
      pos [set every frame] = $(figure_pos, 50)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_surface_2
      fillColor = white
      pos = (0, 15)
      saveStartStop = False
      shape = triangle
      size = (10000, 10)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_collect_3
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [condition] = collected
      text = Walk to collect calligraphy...
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    TextComponent text_collect_4
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [condition] = collected
      stopVal [duration (s)] = 2.0
      text = Calligraphy collected!
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    KeyboardComponent key_control_2
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation.

        You will now be redirected to a brief follow-up survey with a few additional questions. This survey is an important part of our research.


        Please click the [NEXT] button below to proceed to the follow-up questions.
    ImageComponent image_end
      image = img/buttonend.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_end
      clickable = image_end
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine rest
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    TextComponent text_rest_counter
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_time
      text [set every frame] = $str(round(rest_time-t,1))
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    TextComponent text_rest
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_time
      text [set every repeat] = Rest period before advancing...
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  Routine attention_check_2
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    CodeComponent code_attention_check_2
      Code Type = JS
      End JS Routine:
        attention_check2 = {"buttonA": 1, "buttonB": 2, "buttonC": 3, "buttonD": 4, "buttonE": 5}[mouse_attention_2.clicked_name[0]];
        psychoJS.experiment.addData("attention_check2", attention_check2);
    TextComponent text_attention_check_2
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = We are interested in which order (sequence of roles) you completed the calligraphy rating task. Please tell us which order applies to you:
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    TextboxComponent textboxA
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the first part I was a seller, in the second part I was a buyer
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    ImageComponent buttonA
      image = img/buttonA.png
      pos = (-0.4, 0)
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxB
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (-0.3, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the first part I was a buyer, in the second part I was a seller
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    ImageComponent buttonB
      image = img/buttonB.png
      pos = (-0.4, -0.1)
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxC
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (-0.3, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I was a buyer in all parts of the experiment
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    ImageComponent buttonC
      image = img/buttonC.png
      pos = (-0.4, -0.2)
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxD
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I was a seller in all parts of the experiment
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    ImageComponent buttonD
      image = img/buttonD.png
      pos = (-0.4, -0.3)
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxE
      alignment = center-left
      anchor = center-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I did not receive any instructions about being a buyer or a seller
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    ImageComponent buttonE
      image = img/buttonE.png
      pos = (-0.4, -0.4)
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_attention_2
      clickable = buttonA, buttonB, buttonC, buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine attention_check_1
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    CodeComponent code_attention_check
      Code Type = JS
      Begin JS Experiment:
        button_numbers = [1, 2, 3, 4, 5];
      Begin JS Routine:
        correct_button = 0;
        if ((this_trial === 10)) {
            continueRoutine = true;
            correct_button = util.randchoice(button_numbers);
            attention_text = ("Please click button number " + correct_button);
        } else {
            continueRoutine = false;
        }
      End JS Routine:
        if ((mouse_attention.clicked_name[0] === ("button" + correct_button.toString()))) {
            psychoJS.experiment.addData("attention_check", 1);
        } else {
            psychoJS.experiment.addData("attention_check", 0);
        }
    TextComponent text_attention
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $attention_text
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    ImageComponent button1
      image = img/button1.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent button2
      image = img/button2.png
      pos = (-0.3, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent button3
      image = img/button3.png
      pos = (0.0, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent button4
      image = img/button4.png
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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      pos:
        (0.3, -0.2
        )
    ImageComponent button5
      image = img/button5.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_attention
      clickable = button1, button2, button3, button4, button5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine fix
  LoopInitiator img_rand_loop loopType="TrialHandler"
    conditionsFile = conditions/stims.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian1')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian3')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian4')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian5')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian6')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian7')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian8')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian9')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani1')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani3')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani4')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani5')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani6')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani7')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani8')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani9')])]
    Routine rand_img_main
  LoopTerminator img_rand_loop
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions/stims.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian1')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian3')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian4')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian5')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian6')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Georgian7')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Georgian8')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Georgian9')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani1')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani3')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani4')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani5')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani6')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'Konkani7')]),
      OrderedDict([('effort_level', 'low'), ('stim_img', 'Konkani8')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'Konkani9')])]
    Routine ready_trial
    Routine fix
    Routine attention_check_1
    Routine start_block
    Routine fix
    Routine bid_walks
    Routine fix
    Routine bid_rating
    Routine fix
    Routine rest
  LoopTerminator trials_loop
  Routine attention_check_2
  Routine load_instr
  LoopInitiator img_load_loop_load loopType="TrialHandler"
    conditionsFile = conditions/stimsload.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('stim_img', 'load1')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'load2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'load3')])]
    Routine rand_img_load
  LoopTerminator img_load_loop_load
  LoopInitiator trials_load loopType="TrialHandler"
    conditionsFile = conditions/stimsload.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('stim_img', 'load1')]),
      OrderedDict([('effort_level', 'medium'), ('stim_img', 'load2')]),
      OrderedDict([('effort_level', 'high'), ('stim_img', 'load3')])]
    Routine load_ready
    Routine load_walks
    LoopInitiator loads_loop loopType="TrialHandler"
      conditionsFile = conditions/loads.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('load_type', 'mental'), ('load_question', 'How mentally demanding was this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'physical'), ('load_question', 'How physically demanding was this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'temporal'), ('load_question', 'How hurried or rushed was the pace of this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'performance'), ('load_question', 'How successful were you in accomplishing what you were asked to do in this trial?'), ('load_low', 'Perfect'), ('load_high', 'Failure')]),
        OrderedDict([('load_type', 'effort'), ('load_question', 'How hard did you have to work to  accomplish your level of performance in this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'frustration'), ('load_question', 'How insecure, discouraged, irritated, stressed, and annoyed were you in this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'pleasure'), ('load_question', 'How pleasant was it for you to complete this trial?'), ('load_low', 'Very Low'), ('load_high', 'Very High')]),
        OrderedDict([('load_type', 'meaning'), ('load_question', 'How meaningful did you find\xa0this trial?'), ('load_low', 'Definitely meaningless'), ('load_high', 'Definitely meaningful')])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
      Routine fix
      Routine load_rating
    LoopTerminator loads_loop
    Routine fix
    Routine rest
  LoopTerminator trials_load
  Routine end
