PsychoPy2experiment version="2022.1.4"
Settings
  Completed URL = $"https://psychodpt.fra1.qualtrics.com/jfe/form/SV_9yNrzDYtOcjoTXg?experiment_id="+expInfo['experiment_id']+"&credit_token="+expInfo['credit_token']+"&experiment_name="+expInfo['experiment_name']+"&id="+expInfo['id']
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['id'], expInfo['experiment_name'], expInfo['experiment_id'], expInfo['date'])
  Experiment info = {'id': '', 'experiment_id': '', 'experiment_name': '', 'credit_token': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['buttonend.png', 'buttonnext.png', 'buttonok.png', 'conds.csv', 'loads.csv', 'stims.csv', 'trans_arrow.png', 'img/Georgian1.JPG', 'img/Georgian2.JPG', 'img/Georgian3.JPG', 'img/Georgian4.JPG', 'img/Georgian5.JPG', 'img/Georgian6.JPG', 'img/Georgian7.JPG', 'img/Georgian8.JPG', 'img/Georgian9.JPG', 'img/Konkani1.JPG', 'img/Konkani2.JPG', 'img/Konkani3.JPG', 'img/Konkani4.JPG', 'img/Konkani5.JPG', 'img/Konkani6.JPG', 'img/Konkani7.JPG', 'img/Konkani8.JPG', 'img/Konkani9.JPG', 'img/training1.JPG', 'img/training2.JPG', 'img/training3.JPG', 'fframes/step0.png', 'fframes/step1.png', 'fframes/step2.png', 'fframes/step3.png', 'fframes/step4.png', 'fframes/step5.png', 'fframes/step6.png', 'fframes/step7.png', 'fframes/step8.png', 'fframes/step9.png', 'fframes/step10.png', 'fframes/step11.png']
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = ratingclickstaskload
  keyboardBackend = ioHub
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Routines
  Routine blank_screen
    TextComponent fix
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine start
    CodeComponent code_both
      Code Type = Both
      Begin Experiment:
        step_distance = 1000-150
        step_low_base = step_distance/30
        step_medium_base = step_distance/100
        step_high_base = step_distance/270

        step_low = step_low_base + (1-(step_low_base % 1))
        step_medium = step_medium_base + (1-(step_medium_base % 1))
        step_high = step_high_base + (1-(step_high_base % 1))
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        step_distance = 1000-150;
        step_low_base = step_distance/30;
        step_medium_base = step_distance/100;
        step_high_base = step_distance/270;
        step_low = step_low_base + (1-(step_low_base % 1));
        step_medium = step_medium_base + (1-(step_medium_base % 1));
        step_high = step_high_base + (1-(step_high_base % 1));
        psychoJS.experiment.addData("id", expInfo['id']);
        psychoJS.experiment.addData("experiment_name", expInfo['experiment_name']);
        psychoJS.experiment.addData("experiment_id", expInfo['experiment_id']);
    TextComponent text_instr
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        TASK INSTRUCTIONS

        Thank you for agreeing to participate in today's experiment!

        Please make sure to read all following instructions carefully.

        In this study you will be asked to perform a series of tasks that involve moving a figure across the screen to its destination.

        When prompted, start "walking" by pressing [SPACE] for each step necessary to reach the destination. When a given number of steps is reached, you will proceed to the next task. Try performing the steps as quickly as you can.

        After each task, use the scales presented on the screen to rate the different characteristics of the task that you just performed. Use the mouse to navigate each scale and confirm your choice by clicking [OK]. There will be a 15 second rest period following each task.
    ImageComponent image_next
      image = buttonnext.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_next
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_next
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine load_img
    CodeComponent code_loading
      Code Type = Both
      Begin Experiment:
        list_img=[]
      Begin JS Experiment:
        list_img = [];
      Begin JS Routine:
        list_img.push(stim_img);
      Begin Routine:
        list_img.append(stim_img)
  Routine walks
    CodeComponent code_walks
      Code Type = Both
      Begin Experiment:
        this_trial = 0
      Begin JS Experiment:
        this_trial = 0;
      Begin JS Routine:
        fframe = "fframes/step0.png";
        img_figure.setImage(fframe);
      Begin Routine:
        fframe = "fframes/step0.png"
        img_figure.setImage(fframe)
      Each Frame:
        keys_ctrl = key_control.getKeys(['space'], waitRelease=True)

        if 'space' in keys_ctrl:
            if keyup > 10:
                traveled += step_size
                if traveled <= step_distance:
                    figure_pos += step_size
                    fcounter += 1
                if traveled >= step_distance:
                    collected = True
            keyup = 0
        else:
            keyup += 1

        #if 'space' in keys_ctrl:
        #    traveled += step_size
        #    if traveled <= (1000-150):
        #        figure_pos += step_size
        #        fcounter += 1
        #    if traveled >= (1000-150):
        #        collected = True

        fframe = 'fframes/step' + str(fcounter%11) + ".png"

        if text_collect_2.status==FINISHED:
            continueRoutine=False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys_ctrl = event.getKeys({"keyList": ["space"], "waitRelease": true});
        if (_pj.in_es6("space", keys_ctrl)) {
            if ((keyup > 10)) {
                traveled += step_size;
                if ((traveled <= step_distance)) {
                    figure_pos += step_size;
                    fcounter += 1;
                }
                if ((traveled >= step_distance)) {
                    collected = true;
                }
            }
            keyup = 0;
        } else {
            keyup += 1;
        }
        fframe = (("fframes/step" + (fcounter % 11).toString()) + ".png");
        if ((text_collect_2.status === PsychoJS.Status.FINISHED)) {
            continueRoutine = false;
        }
      End JS Routine:
        effort_time = t;
      End Routine:
        effort_time=t
    ImageComponent img_arrow
      image = trans_arrow.png
      pos = (495, 175)
      saveStartStop = False
      size = (300, 300)
      units = pix
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    ImageComponent img_figure
      image [set every frame] = $fframe
      pos [set every frame] = $(figure_pos, 50)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_ground
      fillColor = white
      pos = (0, 15)
      saveStartStop = False
      shape = rectangle
      size = (10000, 10)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_collect_1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = collected
      text = Walk to complete task...
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    TextComponent text_collect_2
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [condition] = collected
      stopVal [duration (s)] = 2
      text = Task complete!
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    KeyboardComponent key_control
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine collect
  Routine rate
    CodeComponent code_scale
      Code Type = Both
      Begin JS Routine:
        random_pos = util.randint(1, 21);
        scale = new visual.Slider({"win": psychoJS.window, "name": "scale", "ticks": [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21], "size": [1.25, 0.075], "pos": [0, (- 0.2)], "units": "height", "labels": [load_low, load_high], "startValue": random_pos, "granularity": 0, "style": ["rating"], "color": "LightGray", "markerColor": "red", "font": "OpenSans", "flip": false});
      Begin Routine:
        random_pos = randint(1,21)
        scale = visual.Slider(win=win, name='scale',
            ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21),
            size=(1.25, 0.075), pos=(0, -0.2), units='height',
            labels = [load_low, load_high], startValue = random_pos,
            granularity=0, style=('rating',),
            color='LightGray', markerColor = 'red',
            font='OpenSans', flip=False)
      Each Frame:
        #keys_rate = key_rate.getKeys(['f', 'k', 'space'], waitRelease=True)

        #if 'f' in keys_rate or 'k' in keys_rate:
        #    for key in keys_rate:
        #        if key == 'f':
        #            scale.markerPos-=1
        #        elif key == 'k':
        #            scale.markerPos+=1
        #    scale.recordRating(scale.markerPos)
        #    scale_rating = scale.getRating()
        #    scale_rt = scale.getRT()
        #    show_confirm = True

        #if show_confirm:
        #    if 'space' in keys_rate:
        #        continueRoutine=False
      Each JS Frame:
        /* Syntax Error: Fix Python code */
      End JS Routine:
        scale_rating = scale.getRating();
        scale_rt = scale.getRT();
        load_order += load_type;
        psychoJS.experiment.addData("load_comp", load_type);
        psychoJS.experiment.addData("load_rating", scale_rating);
        psychoJS.experiment.addData("load_rt", scale_rt);
      End Routine:
        scale_rating = scale.getRating()
        scale_rt = scale.getRT()

        load_order += load_type

        thisExp.addData('load_comp', load_type)
        thisExp.addData('load_rating', scale_rating)
        thisExp.addData('load_rt', scale_rt)
    TextComponent scale_question
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $load_question
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    SliderComponent scale
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.25, 0.075)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21)
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    ImageComponent image_ok
      image = buttonok.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [condition] = scale.rating
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    MouseComponent mouse_scale
      clickable = image_ok
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_rate
      allowedKeys = 'f','k','space'
      disabled = True
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_end
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment has ended, please notify the experimenter.

        Thank you for your participation!
    ImageComponent image_end
      image = buttonend.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_end
      clickable = image_end
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_end
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine post
    CodeComponent code_post
      Code Type = Both
      Begin JS Routine:
        duration_prompt = 15;
        duration_counter = 15;
        prompt_text = "Rest period before advancing\nto next calligraphy...";
        psychoJS.experiment.addData("load_order", load_order);
        psychoJS.experiment.addData("effort_time", effort_time);
      Begin Routine:
        #scale_counter += 1
        #if scale_counter < 2:
        #    prompt_text = "Now please answer\nthe next separate question"
        #    duration_prompt = 1
        #    duration_counter = 0
        #else:
        #    prompt_text = "Rest period before advancing\nto next calligraphy..."
        #    duration_prompt = 15
        #    duration_counter = 15

        duration_prompt = 15
        duration_counter = 15
        prompt_text = "Rest period before advancing\nto next calligraphy..."
        thisExp.addData('load_order', load_order)
        thisExp.addData('effort_time', effort_time)
    TextComponent text_counter
      letterHeight = 0.1
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_counter
      text [set every frame] = $str(round(duration_counter-t,1))
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    TextComponent text_post
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_prompt
      text [set every repeat] = $prompt_text
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  Routine pre
    CodeComponent code_walks_init
      Code Type = Both
      Begin JS Routine:
        this_trial += 1;
        load_order = "";
        psychoJS.experiment.addData("trial", this_trial);
        psychoJS.experiment.addData("effort_level", effort_level);
        fcounter = 0;
        figure_pos = (- 500);
        traveled = 0;
        collected = false;
        if ((effort_level === "low")) {
            step_size = step_low;
        } else {
            if ((effort_level === "medium")) {
                step_size = step_medium;
            } else {
                if ((effort_level === "high")) {
                    step_size = step_high;
                }
            }
        }
        keyup = 0;
      Begin Routine:
        this_trial += 1
        #scale_counter = 0
        load_order = ''
        thisExp.addData('trial', this_trial)
        thisExp.addData('effort_level', effort_level)
        fcounter = 0
        figure_pos = -500
        traveled = 0
        collected = False

        if effort_level == 'low':
            step_size = step_low
        elif effort_level == 'medium':
            step_size = step_medium
        elif effort_level == 'high':
            step_size = step_high

        keyup = 0
Flow
  Routine start
  Routine blank_screen
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = stims.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Georgian1')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Georgian2')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Georgian3')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Georgian4')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Georgian5')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Georgian6')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Georgian7')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Georgian8')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Georgian9')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Konkani1')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Konkani2')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Konkani3')]),
      OrderedDict([('effort_level', 'medium'), ('effort_time', 15), ('stim_img', 'Konkani4')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Konkani5')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Konkani6')]),
      OrderedDict([('effort_level', 'high'), ('effort_time', 45), ('stim_img', 'Konkani7')]),
      OrderedDict([('effort_level', 'low'), ('effort_time', 5), ('stim_img', 'Konkani8')])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
    Routine pre
    Routine walks
    LoopInitiator loads_loop loopType="TrialHandler"
      conditionsFile = loads.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('load_type', 'mental'), ('load_question', 'How mentally demanding was the task?')]),
        OrderedDict([('load_type', 'physical'), ('load_question', 'How physically demanding was the task?')]),
        OrderedDict([('load_type', 'temporal'), ('load_question', 'How hurried or rushed was the pace of the task?')]),
        OrderedDict([('load_type', 'performance'), ('load_question', 'How successful were you in accomplishing what you were asked to do?')]),
        OrderedDict([('load_type', 'effort'), ('load_question', 'How hard did you have to work to  accomplish your level of performance?')]),
        OrderedDict([('load_type', 'frustration'), ('load_question', 'How insecure, discouraged, irritated, stressed, and annoyed wereyou?')]),
        OrderedDict([('load_type', 'pleasure'), ('load_question', 'How pleasant was it for you to complete the task?')])]
      Routine blank_screen
      Routine rate
    LoopTerminator loads_loop
    Routine blank_screen
    Routine post
    Routine blank_screen
  LoopTerminator trials_loop
  Routine end
