PsychoPy2experiment version="2020.2.8"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant_number'], expName, expInfo['date'])
  Experiment info = {'Participant_number': '', 'Sex': "['male', 'female']", 'Age': '', 'Height': '', 'Weight': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Use version = latest
  Window size (pixels) = [1536, 864]
  color = $[-1.000,-1.000,-1.000]
  expName = taskload
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Routines
  Routine ITI
    TextComponent blank_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Instructions_End
    TextComponent textEnd
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The experiment has ended, please notify the experimenter.

        Thank you for your participation!
    KeyboardComponent keyResp_end
      allowedKeys = '7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Setup
    CodeComponent init_options
      Code Type = Py
      Begin Experiment:
        from time import gmtime, strftime, localtime
        import random
        import pandas as pd
        import csv

        #Setup paths
        pre_str0='txt/'
        pre_str1='trials/'
        pre_str2='data/'

        #Shorten procedure if test run or debug
        testing=False

        if testing==False:
            n_instr=1
            stimuli=pd.read_csv(pre_str1+'trialStim.txt', delimiter='\t')

        elif testing==True:
            n_instr=1-int(testing)
            stimuli=pd.read_csv(pre_str1+'trialStim_test.txt', delimiter='\t')

        #Set parameters for rating scales
        navig1 = dict(leftKeys='f', rightKeys='k', acceptKeys='space',
                      low=1, high=5,
                      labels=["very low", "very high"],
                      markerStart=3, marker='circle',
                      textColor='white',
                      markerColor='red',
                      showAccept=False, pos=(0, -0.4),
                      noMouse=True)

        #Read instruction files
        textIntro=''
        with open(pre_str0+'instructionsGeneral.txt') as f:
            textIntro=f.read().strip()

        textTask=''
        with open(pre_str0+'instructionsPerformance.txt') as f:
            textTask=f.read().strip()

        #Read stimuli files
        colnames=['trialNum',
                  'effortLevelTrain', 'effortRepTrain',
                  'scaleTypeTrain', 'scaleTextTrain',
                  'effortLevelProc', 'effortRepProc',
                  'scaleTypeProc', 'scaleTextProc']

        #Create stimuli lists
        effortsListTrain=stimuli.effortLevelTrain.tolist()
        scaleTypeListRandTrain=stimuli.scaleTypeTrain.tolist()
        scaleTextListRandTrain=stimuli.scaleTextTrain.tolist()
        effortsListProc=stimuli.effortLevelProc.tolist()
        scaleTypeListRandProc=stimuli.scaleTypeProc.tolist()
        scaleTextListRandProc=stimuli.scaleTextProc.tolist()

        #Drop NaNs
        effortsListTrain=[f for f in effortsListTrain if str(f) != 'nan']
        scaleTypeListRandTrain=[f for f in scaleTypeListRandTrain if str(f) != 'nan']
        scaleTextListRandTrain=[f for f in scaleTextListRandTrain if str(f) != 'nan']
        effortsListProc=[f for f in effortsListProc if str(f) != 'nan']
        scaleTypeListRandProc=[f for f in scaleTypeListRandProc if str(f) != 'nan']
        scaleTextListRandProc=[f for f in scaleTextListRandProc if str(f) != 'nan']

        #Get the participant and group info for naming data files
        subjectID=expInfo['Participant_number']

        #Number of trials
        trialsTrain=len(effortsListTrain)
        trialsProc=len(effortsListProc)

        #Number of ratings
        ratingsTrain=len(scaleTypeListRandTrain)
        ratingsProc=len(scaleTypeListRandProc)

        #Setup data logging
        root_dir=os.getcwd()
        data_dir=os.path.join(root_dir, 'data')
        fname_data=str(subjectID)+'_'+'data.csv'
        fname_data_practice=str(subjectID)+'_'+'data_practice.csv'
        fname_sub=str(subjectID)+'_'+'subjectInfo.csv'

        dataColTrain=['id', 'trialPractice', 'effort',
                      'scaleType', 'scaleText', 'scaleRating', 'scaleRT']

        dataCol=['id', 'trial', 'effort',
                      'scaleType', 'scaleText', 'scaleRating', 'scaleRT']

        subCol=['subjID', 'sex', 'age', 'height', 'weight', 'time']
        df=pd.DataFrame(columns=dataCol)
        df_practice=pd.DataFrame(columns=dataColTrain)
        df_sub=pd.DataFrame(columns=subCol)

        def fill_df_from_LikertTrain(df_practice, trialTrain, scaleType, scaleText, scaleRating, scaleRT):
                                         row_idx = df_practice.shape[0]+1
                                         df_practice.loc[row_idx, 'id']=subjectID
                                         df_practice.loc[row_idx, 'trialPractice']=trialTrain
                                         df_practice.loc[row_idx, 'effort']=thisEffort
                                         df_practice.loc[row_idx, 'time']=thisTime
                                         df_practice.loc[row_idx, 'scaleType']=thisScaleType
                                         df_practice.loc[row_idx, 'scaleText']=thisScaleText
                                         df_practice.loc[row_idx, 'scaleRating']=currentRating.getRating()
                                         df_practice.loc[row_idx, 'scaleRT']=currentRating.getRT()

        def fill_df_from_Likert(df, trial, scaleType, scaleText, scaleRating, scaleRT):
                                   row_idx = df.shape[0]+1
                                   df.loc[row_idx, 'id']=subjectID
                                   df.loc[row_idx, 'trial']=trial
                                   df.loc[row_idx, 'effort']=thisEffort
                                   df.loc[row_idx, 'time']=thisTime
                                   df.loc[row_idx, 'scaleType']=thisScaleType
                                   df.loc[row_idx, 'scaleText']=thisScaleText
                                   df.loc[row_idx, 'scaleRating']=currentRating.getRating()
                                   df.loc[row_idx, 'scaleRT']=currentRating.getRT()
      Begin Routine:
        #Save subject info
        df_sub.loc[0, 'subjID']=subjectID
        df_sub.loc[0, 'sex']=expInfo['Sex']
        df_sub.loc[0, 'age']=expInfo['Age']
        df_sub.loc[0, 'height']=expInfo['Height']
        df_sub.loc[0, 'weight']=expInfo['Weight']
        df_sub.loc[0, 'time']=strftime("%Y-%m-%d %H:%M:%S", localtime())
        df_sub.to_csv(os.path.join(data_dir, fname_sub))
  Routine startTraining
    CodeComponent codeTrain
      Code Type = Py
      Begin Experiment:
        #Reset trial counter
        trialTrain=0
      Begin Routine:
        #Randomize scales order for reach trial
        scaleListRandTrain=list(zip(scaleTypeListRandTrain, scaleTextListRandTrain))
        random.shuffle(scaleListRandTrain)

        scaleTypeListRandTrain[:], scaleTextListRandTrain[:] = zip(*scaleListRandTrain)

        #Select stimuli based on current trial number
        thisEffort=effortsListTrain[trialTrain]
        trialTrain=trialTrain+1
        stopTime=2.0

        #Reset ratings rep counter
        repTrain=0
  Routine startProc
    CodeComponent codeProc
      Code Type = Py
      Begin Experiment:
        #Reset main trial counter
        trial=0
      Begin Routine:
        #Randomize scales order for reach trial
        scaleListRandProc=list(zip(scaleTypeListRandProc, scaleTextListRandProc))
        random.shuffle(scaleListRandProc)

        scaleTypeListRandProc[:], scaleTextListRandProc[:] = zip(*scaleListRandProc)

        #Select stimuli based on current trial number
        thisEffort=effortsListProc[trial]
        trial=trial+1
        stopTime=2.0

        #Reset ratings rep counter
        repProc=0
  Routine Instructions_Task
    TextComponent textIntroTask
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $textTask
      wrapWidth = 1.5
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    TextComponent textContinue_2
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press [SPACE] to continue.
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    KeyboardComponent keyResp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions_Main
    TextComponent textTaskStart
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Practice session has ended.

        If you have any questions, please notify the experimenter now.

        Press [SPACE] to proceed to the main experiment session.
    KeyboardComponent keyResp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions_Practice
    TextComponent textIntroPractice
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        PRACTICE SESSION

        The experiment will begin with a brief practice session to help familiarize you with the rules.

        The practice session will be followed by the main experimental session.
    TextComponent textContinue_3
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press [SPACE] to continue.
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    KeyboardComponent keyResp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions_General
    TextComponent textIntroGeneral
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $textIntro
      wrapWidth = 1.5
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    TextComponent textContinue_1
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press [SPACE] to continue.
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    KeyboardComponent keyResp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Effort_Performance
    TextComponent textCollect
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0
      text = Walk to complete this task
      wrapWidth = 1.5
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    KeyboardComponent keyResp_nextTrial
      allowedKeys = '7'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent codeTime
      Code Type = Py
      End Routine:
        thisTime=t-textCollect.tStart
  Routine Rest_Period
    TextComponent textRest
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Rest period
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    TextComponent textCounter
      letterHeight = 0.15
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $str(round(routineTimer.getTime(),1))
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  Routine Save_Data
    CodeComponent codeSave
      Code Type = Py
      End Routine:
        #Save scale response and RT
        scaleResp=currentRating.getRating()
        scaleRT=currentRating.getRT()
        scaleType=thisScaleType
        scaleText=thisScaleText

        #Save last response
        fill_df_from_Likert(df, trial, scaleResp, scaleRT, scaleType, scaleText)
        df.to_csv(os.path.join(data_dir, fname_data))
  Routine Rate_Reward
    CodeComponent setup_rating_1
      Code Type = Py
      Begin Routine:
        #Set the rating scale description
        currentRating = visual.RatingScale(win, scale = scale_text, **navig)
    ImageComponent rewardPresent_1
      image [set every repeat] = $'img/'+imageItem+'.jpg'
      pos = (0, 175)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = pix
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    TextComponent ratingText_1
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Rate with [F] or [K] keys and press [SPACE] to accept.
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    CodeComponent present_rating_1
      Code Type = Py
      Begin Routine:
        #Draw scale
        stim_to_draw1=[rewardPresent_1]
        stim_to_draw2=[currentRating, ratingText_1]

        currentRating.reset()
        currentRating.draw()

        clock = core.Clock()
        while currentRating.noResponse:
            if clock.getTime() < 4.0:
                for stim in stim_to_draw1: stim.draw()
            for stim in stim_to_draw2: stim.draw()
            win.flip()
  Routine Save_Data_Practice
    CodeComponent codeSave_3
      Code Type = Py
      End Routine:
        #Save scale response and RT
        scaleResp=currentRating.getRating()
        scaleRT=currentRating.getRT()
        scaleType=thisScaleType
        scaleText=thisScaleText

        #Save last response
        fill_df_from_LikertTrain(df_practice, trialTrain, scaleResp, scaleRT, scaleType, scaleText)
        df_practice.to_csv(os.path.join(data_dir, fname_data_practice))
  Routine blank0
    TextComponent blank_text_0
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine blank1
    TextComponent blank_text_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Rate_howPleasant
    CodeComponent setup_rating_2
      Code Type = Py
      Begin Routine:
        #Set the rating scale description
        currentRating_pleasant = visual.RatingScale(win, scale = scale_text_pleasant, **navig2)
    TextComponent ratingText_2
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Rate with [F] or [K] keys and press [SPACE] to accept.
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    CodeComponent present_rating_2
      Code Type = Py
      Begin Routine:
        #Draw scale
        stim_to_draw2=[currentRating_pleasant, ratingText_2]

        currentRating_pleasant.reset()
        currentRating_pleasant.draw()

        clock = core.Clock()
        while currentRating_pleasant.noResponse:
            for stim in stim_to_draw2: stim.draw()
            win.flip()
  Routine Rate_Task
    CodeComponent setup_rating
      Code Type = Py
      Begin Routine:
        #Set the rating scale description
        currentRating = visual.RatingScale(win, scale = thisScaleText, **navig1)
    TextComponent ratingText
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Rate with [F] or [K] keys and press [SPACE] to accept.
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    CodeComponent present_rating
      Code Type = Py
      Begin Routine:
        #Draw scale
        stim_to_draw2=[currentRating, ratingText]

        currentRating.reset()
        currentRating.draw()

        clock = core.Clock()
        while currentRating.noResponse:
            for stim in stim_to_draw2: stim.draw()
            win.flip()
  Routine startScalesTraining
    CodeComponent codeTrain_2
      Code Type = Py
      Begin Routine:
        #Select stimuli based on current practice trial number
        thisScaleType=scaleTypeListRandTrain[repTrain]
        thisScaleText=scaleTextListRandTrain[repTrain]
        repTrain=repTrain+1
  Routine startScalesProc
    CodeComponent codeProc_2
      Code Type = Py
      Begin Routine:
        #Select stimuli based on current practice trial number
        thisScaleType=scaleTypeListRandProc[repProc]
        thisScaleText=scaleTextListRandProc[repProc]
        repProc=repProc+1
  Routine Task_Complete_Proc
    TextComponent textCollected_1
      color = green
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = You completed this task!
      wrapWidth = 1.5
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  Routine Task_Complete_Train
    TextComponent textCollected
      color = green
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = You completed this task!
      wrapWidth = 1.5
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    TextComponent textStop
      color = green
      letterHeight = 0.1
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stopTime
      text = (stop walking)
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Flow
  Routine Setup
  LoopInitiator run_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_instr
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    Routine Instructions_General
    Routine blank0
    Routine Instructions_Task
    Routine blank0
    Routine Instructions_Practice
  LoopTerminator run_instructions
  Routine blank1
  LoopInitiator trials_practice loopType="TrialHandler"
    loopType = sequential
    nReps = trialsTrain
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    Routine startTraining
    Routine Effort_Performance
    Routine Task_Complete_Train
    Routine blank1
    LoopInitiator scales_train loopType="TrialHandler"
      loopType = sequential
      nReps = ratingsTrain
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      Routine startScalesTraining
      Routine Rate_Task
      Routine blank0
      Routine Save_Data_Practice
    LoopTerminator scales_train
    Routine Rest_Period
    Routine ITI
  LoopTerminator trials_practice
  Routine blank1
  Routine Instructions_Main
  Routine blank1
  LoopInitiator trials_main loopType="TrialHandler"
    loopType = sequential
    nReps = trialsProc
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    Routine startProc
    Routine Effort_Performance
    Routine Task_Complete_Proc
    Routine blank1
    LoopInitiator ratings_proc loopType="TrialHandler"
      loopType = sequential
      nReps = ratingsProc
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      Routine startScalesProc
      Routine Rate_Task
      Routine blank0
      Routine Save_Data
    LoopTerminator ratings_proc
    Routine Rest_Period
    Routine ITI
  LoopTerminator trials_main
  Routine Instructions_End
